PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = hold_release_demo_v5_skip_release_signal
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Welcome to the hold-release task.

        At the start of each trial, press and hold the SPACE key.

        Keep holding while you see  KEEP HOLDING

        When RELEASE NOW appears, release SPACE as quickly as possible.

        If you release before RELEASE NOW, this will count as an early release.

        Press SPACE to begin.
  Routine trial1
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    KeyboardComponent press_start
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent hold_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = press and HOLD space
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  Routine iti
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    TextComponent text_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine decision_routine
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    TextComponent decision_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
      text [set every repeat] = $msg
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    KeyboardComponent early_release
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
      store = first key
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    CodeComponent early_release_logic
      Code Type = Auto->JS
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      Begin Routine:
        early_release_made = False
      Each Frame:
        if early_release.keys:
            early_release_made = True
  Routine release_signal
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    TextComponent final_release_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = RELEASE NOW
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    KeyboardComponent final_release
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent skip_release_signal_if_early
      Code Type = Auto->JS
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      Begin Routine:
        if early_release_made:
            continueRoutine = False
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Aryan/PSYCHOPY Tasks/hold_release_signal_v1.2/hold_release_conditions_v1.1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 'hold', 'msg': 'KEEP HOLDING', 'dur': 1.5},
      {'cond': 'hold', 'msg': 'KEEP HOLDING', 'dur': 1.5},
      {'cond': 'hold', 'msg': 'KEEP HOLDING', 'dur': 1.5},
      {'cond': 'hold', 'msg': 'KEEP HOLDING', 'dur': 1.5}]
    Routine trial1
    Routine decision_routine
    Routine release_signal
    Routine iti
  LoopTerminator trials
